includeFile = SMC_PBN_Nozzle.txt

i:Ts/Seed = 1

sv:Ma/Water/Components=2 "Hydrogen" "Oxygen"
uv:Ma/Water/Fractions=2 0.111894 0.888106
d:Ma/Water/Density=1.000 g/cm3
d:Ma/Water/MeanExcitationEnergy=72.0 eV
s:Ma/Water/DefaultColor="blue"

s:Ph/ListName = "MyPhy"
s:Ph/MyPhy/Type = "Geant4_Modular"
sv:Ph/MyPhy/Modules = 7 "g4em-standard_opt3" "g4h-phy_QGSP_BIC_HP" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4stopping" "g4radioactivedecay"

################################
# Beam Parameters
################################

# Beam Parameters for loop#

s:So/MyBeam/Type = "Emittance" # Beam, Isotropic, Emittance or PhaseSpace
s:So/MyBeam/Component = "BeamPosition"
s:So/MyBeam/BeamParticle = "proton"
s:So/MyBeam/Distribution = "BiGaussian" # Flat or Gaussian
u:so/Mybeam/correlationX = -1
u:so/Mybeam/correlationY = -1

s:Ge/Patient/Type           = "TsDicomPatient"
s:Ge/Patient/DicomDirectory = "CT"
dv:Ge/Patient/CloneRTDoseGridSize = 3 5 5 5 mm

s:Sc/DoseOnCTGrid/Quantity                  = "DoseToMedium"
s:Sc/DoseOnCTGrid/Component                 = "Patient"
b:Sc/DoseOnCTGrid/OutputToConsole           = "True"
s:Sc/DoseOnCTGrid/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/DoseOnCTGrid/OutputType                = "DICOM"
b:Sc/DoseOnCTGrid/DICOMOutput32BitsPerPixel = "True"

s:Sc/LETOnCTGrid/Quantity                  = "ProtonLET"
s:Sc/LETOnCTGrid/Component                 = "Patient"
b:Sc/LETOnCTGrid/OutputToConsole           = "True"
s:Sc/LETOnCTGrid/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/LETOnCTGrid/OutputType                = "DICOM"
b:Sc/LETOnCTGrid/DICOMOutput32BitsPerPixel = "True"

i:Gr/ShowOnlyOutlineIfVoxelCountExceeds = 210000000


